// parameters_TV_Notch.hoc
// Cochlear Nucleus network model: parameters file
// based on parameters_odour_baseline.hoc by Andrew Davison
// Michael Eager, University of Melbourne

nchannels       = 100      // Total number of frequency channels
nTSperchannel   = 0   // number of TS cells in each freq channel
numTS   = nchannels*nTSperchannel   // total number of TS cells
nTVperchannel   = 1   // number of TV cells in each freq channel
numTV   = nchannels*nTVperchannel   // total number of TV cells
nDSperchannel   = 1   // number of DS cells in each freq channel
numDS   = nchannels*nDSperchannel   // total number of DS cells
nGperchannel   = 1   // number of Golgi cells in each freq channel
numG   = nchannels*nGperchannel   // total number of Golgi cells
HSRsperchannel  =   40
MSRsperchannel  =   0
LSRsperchannel  =   20
seed        = 0         // seed for random number generator
thresh      = -10       // mV   // threshold for detecting spikes


strdef fileroot
sprint(fileroot,"TV_Notch") // root for output filenames

inputnumber = 1		// fixed input file
stimtype    = 8		// Notch noise (White noise filtered with stop-band filter)
tstop       = 80        // ms   total simulation time
ttrans       = 10       // ms  	// when calculating statistics, ignore
            			// spikes occuring before this time
cvode.active(0)
dt        = 0.05   	//ms  cannot be any higher than 0.1
steps_per_ms = 10
setdt()
celsius = 37
secondorder=2		//Crank-Nicholson Integration method 

